PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word_rec
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Routines
  Routine welcome_screen
    TextComponent welcome_text
      durationEstim = 2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Welcome!
        The experiment will start shortly.

        Relax and wait to read the instructions.
  Routine Instructions_screen
    TextComponent instructions_screen
      letterHeight = 0.1
      startVal [time (s)] = 2.0
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      text:
        Hello and thank you for participating!
        This is phase 1.
        During this phase, at every trial you will be presented with words (nouns) at the center of the screen. Your task is to read the words and maintain them in memory.
        If you have understood the instructions please press SPACE.
    KeyboardComponent instructions_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning_routine
    TextComponent studyWord
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $stimuli
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  Routine blank500
    TextComponent blank_500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank500ms
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine learning_phase_end
    TextComponent end_learning_phase
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This was the learning phase.

        The instrunctions for the test phase will appear shortly.
Flow
  Routine welcome_screen
  Routine Instructions_screen
  Routine blank500ms
  LoopInitiator learning_trials loopType="TrialHandler"
    conditionsFile = stimuli/word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuli': 'house', 'colour': 'green'},
      {'stimuli': 'friend', 'colour': 'green'},
      {'stimuli': 'summer', 'colour': 'green'},
      {'stimuli': 'glass', 'colour': 'green'},
      {'stimuli': 'spoon', 'colour': 'green'},
      {'stimuli': 'car', 'colour': 'blue'},
      {'stimuli': 'sky', 'colour': 'blue'},
      {'stimuli': 'fire', 'colour': 'blue'},
      {'stimuli': 'bed', 'colour': 'blue'},
      {'stimuli': 'sofa', 'colour': 'blue'}]
    Routine learning_routine
    Routine blank500
  LoopTerminator learning_trials
  Routine blank500ms
  Routine learning_phase_end
